CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:407
GitHash:
ModuleCount:27
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:No
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:No

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (file does contain "ch02")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "ch00")
    Name to assign these images:Denritic
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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enabled:False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
    Select the input image:DNA
    Name the output image:DNA2
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:1000,1500
    Top and bottom rectangle positions:600,1100
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    Remove empty rows and columns?:All
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
Crop:[module_num:6|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enabled:False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
    Select the input image:Denritic
    Name the output image:dendritic2
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:1500,2000
    Top and bottom rectangle positions:1500,2000
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    Remove empty rows and columns?:All
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
ColorToGray:[module_num:7|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enabled:False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
    Select the input image:DNA2
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray_DNA
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:8|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enabled:False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
    Select the input image:dendritic2
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray_dendritic
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
CorrectIlluminationCalculate:[module_num:9|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enabled:False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
    Select the input image:OrigGray_dendritic
    Name the output image:IllumPan
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:10|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enabled:False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
    Select the input image:OrigGray_DNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:11|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enabled:False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
    Select the input image:OrigGray_DNA
    Name the output image:CorrDNA
    Select the illumination function:IllumPan
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:12|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enabled:False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
    Select the input image:OrigGray_dendritic
    Name the output image:Corrdendritic
    Select the illumination function:IllumPan
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
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    Use advanced settings?:No
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
SplitOrMergeObjects:[module_num:14|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enabled:False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
    Select the input objects:Nuclei
    Name the new objects:RelabeledNuclei
    Operation:Split
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
MeasureObjectSizeShape:[module_num:15|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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:16|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
    Select the objects to filter:Nuclei
    Name the output objects:FilteredNuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:10
    Filter using a maximum measurement value?:No
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
EnhanceOrSuppressFeatures:[module_num:17|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
    Select the input image:Denritic
    Name the output image:dendritic_enhanced
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:6
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    Enhancement method:Tubeness
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    Rescale result image:Yes

EnhanceOrSuppressFeatures:[module_num:18|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
    Select the input image:dendritic_enhanced
    Name the output image:dendritic_suppressed_speckles
    Select the operation:Suppress
    Feature size:3
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
MeasureImageIntensity:[module_num:19|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
    Select images to measure:dendritic_suppressed_speckles
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:Yes
    Specify percentiles to measure:0,10,20,40,80

ImageMath:[module_num:20|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:dendritic_suppressed_speckles
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
    Select the second image:dendritic_enhanced
    Multiply the second image by:1.0
    Measurement:Intensity_Percentile_80_dendritic_suppressed_speckles

MaskImage:[module_num:21|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
    Select the input image:ImageAfterMath
    Name the output image:denMask
    Use objects or an image as a mask?:Objects
    Select object for mask:FilteredNuclei
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    Invert the mask?:No

Morph:[module_num:22|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
    Select the input image:denMask
    Name the output image:denNeuron
    Select the operation to perform:shrink
    Number of times to repeat operation:Forever
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
IdentifyPrimaryObjects:[module_num:23|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
    Select the input image:denNeuron
    Name the primary objects to be identified:NucleiShrink
    Typical diameter of objects, in pixel units (Min,Max):1,50
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.5
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
Morph:[module_num:24|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
    Select the input image:ImageAfterMath
    Name the output image:denSkel
    Select the operation to perform:skelpe
    Number of times to repeat operation:Forever
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
ImageMath:[module_num:25|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enabled:False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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:denSkel
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:FilteredObjects
    Multiply the second image by:1.0
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
MeasureObjectSkeleton:[module_num:26|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
    Select the seed objects:FilteredNuclei
    Select the skeletonized image:denSkel
    Retain the branchpoint image?:No
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    Fill small holes?:Yes
    Maximum hole size:10
    Export the skeleton graph relationships?:No
    Intensity image:None
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

ExportToSpreadsheet:[module_num:27|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop\\\\herrington\\\\cellproftest\\\\csvs
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Series_DNA,Image|Series_Denritic,Image|ExecutionTime_02Metadata,Image|ExecutionTime_01Images,Image|ExecutionTime_07ColorToGray,Image|ExecutionTime_16FilterObjects,Image|ExecutionTime_18MaskImage,Image|ExecutionTime_23MeasureObjectSkeleton,Image|ExecutionTime_17EnhanceOrSuppressFeatures,Image|ExecutionTime_20IdentifyPrimaryObjects,Image|ExecutionTime_06Crop,Image|ExecutionTime_05Crop,Image|ExecutionTime_13IdentifyPrimaryObjects,Image|ExecutionTime_14SplitOrMergeObjects,Image|ExecutionTime_15MeasureObjectSizeShape,Image|ExecutionTime_08ColorToGray,Image|ExecutionTime_04Groups,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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